<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Edit the two StringProperty nodes before saving. Each value is reused for both the AVI and CSV outputs for that camera stream, with an underscore inserted before the Bonsai timestamp suffix.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:Format>
            <vid:FrameSize>
              <vid:Width>640</vid:Width>
              <vid:Height>480</vid:Height>
            </vid:FrameSize>
            <vid:AverageFrameRate>30</vid:AverageFrameRate>
            <vid:MaximumFrameRate>30</vid:MaximumFrameRate>
            <vid:BitCount>24</vid:BitCount>
          </vid:Format>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>set-by-Cam0AnimalId.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>set-by-Cam0AnimalId.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp.DateTime,Timestamp.UtcDateTime</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>1</vid:Index>
          <vid:Format>
            <vid:FrameSize>
              <vid:Width>640</vid:Width>
              <vid:Height>480</vid:Height>
            </vid:FrameSize>
            <vid:AverageFrameRate>30</vid:AverageFrameRate>
            <vid:MaximumFrameRate>30</vid:MaximumFrameRate>
            <vid:BitCount>24</vid:BitCount>
          </vid:Format>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>set-by-Cam1AnimalId.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>set-by-Cam1AnimalId.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp.DateTime,Timestamp.UtcDateTime</io:Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Cam0AnimalId" Description="Base name reused for camera 0 AVI and CSV outputs." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>SET_CAM0_ANIMAL_ID</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_.avi</Format>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_.csv</Format>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Cam1AnimalId" Description="Base name reused for camera 1 AVI and CSV outputs." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>SET_CAM1_ANIMAL_ID</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_.avi</Format>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_.csv</Format>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="1" Label="Source2" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="3" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="5" Label="Source2" />
      <Edge From="17" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="7" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
